PsychoPy2experiment version="1.90.1"
Settings
  expName = Exp2
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Window size (pixels) = [1366, 768]
  Screen = 2
  Monitor = testMonitor
  color = $[1,1,1]
  Units = use prefs
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Routines
  Routine inst_initial
    TextComponent inst_1
      startVal [time (s)] = 0.0
      color = black
      letterHeight = 0.1
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      text:
        Olá, seja bem vindo!

        Por favor, coloque o fone de ouvido
        e pressione a tecla "Enter”
    KeyboardComponent key_resp_1
      startVal [time (s)] = 0.0
      allowedKeys = 'return'
      store = nothing
      forceEndRoutine = True
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  Routine inst_vol
    ImageComponent img_keyboard_1
      startVal [time (s)] = 0.0
      size = (1.5, 1.5)
      image = img/keyboard_1.jpg
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    SoundComponent music_1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1000.00
      sound = audio/musica1.wav
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    KeyboardComponent key_resp_2
      startVal [time (s)] = 0.0
      allowedKeys = 'return'
      store = nothing
      forceEndRoutine = True
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  Routine inst_vol2
    TextComponent inst_2
      startVal [time (s)] = 0.0
      color = black
      letterHeight = 0.1
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      text:
        Fique à vontade para ajustar o volume durante todo o experimento.

        Pressione "Enter" para continuar
    KeyboardComponent key_resp_3
      startVal [time (s)] = 1.0
      allowedKeys = 'return'
      store = nothing
      forceEndRoutine = True
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  Routine inst_teste_1
    TextComponent inst_7
      startVal [time (s)] = 0.0
      color = black
      letterHeight = 0.1
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      text:
        Ótimo! O treino acabou!

        Agora você vai ouvir as palavras e ver as figuras que você viu e ouviu anteriormente.

        Pressione "Enter" para continuar
    KeyboardComponent key_resp_10
      startVal [time (s)] = 1.0
      allowedKeys = 'return'
      store = nothing
      forceEndRoutine = True
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  Routine inst_teste_2
    TextComponent inst_8
      startVal [time (s)] = 0.0
      color = black
      letterHeight = 0.1
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      text:
        As tentativas terão o mesmo formato do treino.

        Indique a figura correspondente à palavra que você ouvir.

        Serão apresentadas 24 tentativas (+- 4 minutos).


        Pressione "Enter" para continuar
    KeyboardComponent key_resp_11
      startVal [time (s)] = 1.0
      allowedKeys = 'return'
      store = nothing
      forceEndRoutine = True
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  Routine inst_self_evalu
    SoundComponent sound_beep_2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      sound = audio/beep.wav
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    TextComponent inst_10
      startVal [time (s)] = 0.0
      color = black
      letterHeight = 0.1
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      text:
        Muito bem!
        O estudo está quase no final!

        Por favor, indique qual a porcentagem de relações
        que você acha que conseguiu identificar.

        Pressione "Enter" para continuar
    KeyboardComponent key_resp_14
      startVal [time (s)] = 1.0
      allowedKeys = 'return'
      store = nothing
      forceEndRoutine = True
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  Routine self_evalu_response
    TextComponent text
      startVal [time (s)] = 0.0
      color = black
      letterHeight = 0.1
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      text:
        Pressione:

        1 = até 25%;

        2 = entre 25 e 50%;

        3 = entre 50 e 75%;

        4 = acima de 75%.
    KeyboardComponent key_resp_15
      startVal [time (s)] = 0.0
      allowedKeys = '1','2','3','4'
      forceEndRoutine = True
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  Routine inst_final
    SoundComponent sound_beep_4
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      sound = audio/beep.wav
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    TextComponent inst_13
      startVal [time (s)] = 0.0
      color = black
      letterHeight = 0.1
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      text:
        Muito bem!
        Você terminou o estudo!

        Você já pode tirar o fone de ouvido.

        Pressione "Enter" para chamar o pesquisador
    KeyboardComponent key_resp_18
      startVal [time (s)] = 1.0
      allowedKeys = 'return'
      store = nothing
      forceEndRoutine = True
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  Routine inst_test_fami_1
    TextComponent inst_4
      startVal [time (s)] = 0.0
      color = black
      letterHeight = 0.1
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      text:
        Muito bem!

        Agora, indique qual dentre as quatro
        figuras corresponde à palavra
        que você ouvir.

        Vamos começar treinando com
        palavras conhecidas.

        Pressione “Enter” para continuar
    SoundComponent sound_beep_1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      sound = audio/beep.wav
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    KeyboardComponent key_resp_5
      startVal [time (s)] = 2.0
      allowedKeys = 'return'
      store = nothing
      forceEndRoutine = True
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  Routine inst_test_fami_2
    ImageComponent img_keyboard_2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      size = (1.5, 1.5)
      image = img/keyboard_2.jpg
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  Routine inst_test_fami_3
    ImageComponent img_keyboard_3
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      size = (1.5, 1.5)
      image = img/keyboard_3.jpg
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  Routine inst_test_fami_5
    ImageComponent img_keyboard_5
      startVal [time (s)] = 0.0
      size = (1.5, 1.5)
      image = img/keyboard_5.jpg
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    KeyboardComponent key_resp_7
      startVal [time (s)] = 0.0
      allowedKeys = 'return'
      store = nothing
      forceEndRoutine = True
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  Routine inst_test_fami_4
    ImageComponent img_keyboard_4
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      size = (1.5, 1.5)
      image = img/keyboard_4.jpg
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  Routine training
    SoundComponent sound_training_1
      startVal [time (s)] = 0.85
      stopVal [duration (s)] = 0.90
      sound [set every repeat] = $audio1
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    SoundComponent sound_training_2
      startVal [time (s)] = 2.25
      stopVal [duration (s)] = 0.90
      sound [set every repeat] = $audio2
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    ImageComponent img_training_1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      pos = (-0.5, 0)
      size = (0.7, 1.2)
      image [set every repeat] = $img1
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    ImageComponent img_training_2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      pos = (0.5, 0)
      size = (0.7, 1.2)
      image [set every repeat] = $img2
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  Routine inst_training
    TextComponent inst_3
      startVal [time (s)] = 0.0
      color = black
      letterHeight = 0.1
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      text:
        A seguir você verá várias figuras e
        ouvirá várias palavras.

        A sua tarefa é descobrir as relações
        entre as palavras e as figuras.


        Pressione “Enter” para continuar
    KeyboardComponent key_resp_4
      startVal [time (s)] = 1.0
      allowedKeys = 'return'
      store = nothing
      forceEndRoutine = True
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  Routine fixation
    TextComponent text_3
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      color = black
      text = .
      letterHeight = 0.3
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  Routine inst_training_2
    TextComponent text_5
      startVal [time (s)] = 0.0
      color = black
      letterHeight = 0.1
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      text:
        As figuras e palavras aparecerão
        automaticamente.

        Você não precisa dar nenhum comando.
        Apenas preste atenção.

        Lembre-se: a sua tarefa é descobrir as
        relações entre as palavras e as figuras.

        Pressione "Enter" para continuar
    KeyboardComponent key_resp_6
      startVal [time (s)] = 1.0
      allowedKeys = 'return'
      store = nothing
      forceEndRoutine = True
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  Routine test_familiar
    SoundComponent sound_test_fami
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 0.9
      sound [set every repeat] = $audioTestFami
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    ImageComponent image_3
      startVal [time (s)] = 0.0
      pos = (-0.5, 0.5)
      size = (0.4, 0.6)
      image [set every repeat] = $imgTestFami1
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    ImageComponent image_4
      startVal [time (s)] = 0.0
      pos = (0.5, 0.5)
      size = (0.4, 0.6)
      image [set every repeat] = $imgTestFami2
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    ImageComponent image_5
      startVal [time (s)] = 0.0
      pos = (-0.5, -0.5)
      size = (0.4, 0.6)
      image [set every repeat] = $imgTestFami3
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    ImageComponent image_6
      startVal [time (s)] = 0.0
      pos = (0.5, -0.5)
      size = (0.4, 0.6)
      image [set every repeat] = $imgTestFami4
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    TextComponent label_1
      startVal [time (s)] = 0.0
      color = grey
      pos = (-0.85, 0.85)
      text = 1
      letterHeight = 0.1
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    TextComponent label_2
      startVal [time (s)] = 0.0
      color = grey
      pos = (0.85, 0.85)
      text = 2
      letterHeight = 0.1
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    TextComponent label_3
      startVal [time (s)] = 0.0
      color = grey
      pos = (-0.85, -0.85)
      text = 3
      letterHeight = 0.1
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    TextComponent label_4
      startVal [time (s)] = 0.0
      color = grey
      pos = (0.85, -0.85)
      text = 4
      letterHeight = 0.1
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    KeyboardComponent key_resp_19
      startVal [time (s)] = 1.0
      allowedKeys = '1', '2', '3', '4'
      forceEndRoutine = True
      storeCorrect = True
      correctAns = $correctTestFami
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  Routine test_trials
    SoundComponent sound_1
      startVal [time (s)] = 2.0
      stopVal [duration (s)] = 0.9
      sound [set every repeat] = $audioTest
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    ImageComponent image
      startVal [time (s)] = 0.0
      pos = (-0.5, 0.5)
      size = (0.6, 1.1)
      image [set every repeat] = $imgTestA
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    ImageComponent image_2
      startVal [time (s)] = 0.0
      pos = (0.5, 0.5)
      size = (0.6, 1.1)
      image [set every repeat] = $imgTestB
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    ImageComponent image_7
      startVal [time (s)] = 0.0
      pos = (-0.5, -0.5)
      size = (0.6, 1.1)
      image [set every repeat] = $imgTestC
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    ImageComponent image_8
      startVal [time (s)] = 0.0
      pos = (0.5, -0.5)
      size = (0.6, 1.1)
      image [set every repeat] = $imgTestD
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    KeyboardComponent key_resp_8
      startVal [time (s)] = 2.0
      allowedKeys = '1','2','3','4'
      forceEndRoutine = True
      storeCorrect = True
      correctAns = $correctTest
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    TextComponent text_4
      startVal [time (s)] = 0.0
      color = lightGrey
      pos = (-0.85, 0.85)
      text = 1
      letterHeight = 0.1
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    TextComponent text_6
      startVal [time (s)] = 0.0
      color = lightGrey
      pos = (0.85, 0.85)
      text = 2
      letterHeight = 0.1
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    TextComponent text_7
      startVal [time (s)] = 0.0
      color = lightGrey
      pos = (-0.85, -0.85)
      text = 3
      letterHeight = 0.1
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    TextComponent text_8
      startVal [time (s)] = 0.0
      color = lightGrey
      pos = (0.85, -0.85)
      text = 4
      letterHeight = 0.1
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    CodeComponent code
      Begin Experiment:
        dados = []

        tentativa = 0
      End Routine:
        tentativa = tentativa + 1

        la = 0
        le = 0

        if key_resp_8.corr == 1:
            la = key_resp_8.rt
        else:
            le = key_resp_8.rt

        dados.append([tentativa, key_resp_8.corr, la, le, parT, comp1, comp2, comp3, comp4])
      End Experiment:
        np.savetxt(filename+".txt", dados,  delimiter = "\t")
  Routine fixation_2
    TextComponent text_2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      color = black
      text = .
      letterHeight = 0.3
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Flow
  Routine inst_initial
  Routine inst_vol
  Routine inst_vol2
  Routine inst_training
  Routine inst_training_2
  LoopInitiator trials loopType="TrialHandler"
    nReps = 1
    conditionsFile = training.xlsx
    loopType = random
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    conditions:
      [OrderedDict([('audio1', 'audio/p2.wav'), ('audio2', 'audio/p1.wav'), ('img1', 'img/02.jpg'), ('img2', 'img/01.jpg'), ('par1', 1), ('par2', 2)]),
      OrderedDict([('audio1', 'audio/p1.wav'), ('audio2', 'audio/p3.wav'), ('img1', 'img/03.jpg'), ('img2', 'img/01.jpg'), ('par1', 1), ('par2', 3)]),
      OrderedDict([('audio1', 'audio/p4.wav'), ('audio2', 'audio/p1.wav'), ('img1', 'img/04.jpg'), ('img2', 'img/01.jpg'), ('par1', 1), ('par2', 4)]),
      OrderedDict([('audio1', 'audio/p1.wav'), ('audio2', 'audio/p5.wav'), ('img1', 'img/01.jpg'), ('img2', 'img/05.jpg'), ('par1', 1), ('par2', 5)]),
      OrderedDict([('audio1', 'audio/p1.wav'), ('audio2', 'audio/p6.wav'), ('img1', 'img/06.jpg'), ('img2', 'img/01.jpg'), ('par1', 1), ('par2', 6)]),
      OrderedDict([('audio1', 'audio/p3.wav'), ('audio2', 'audio/p2.wav'), ('img1', 'img/03.jpg'), ('img2', 'img/02.jpg'), ('par1', 2), ('par2', 3)]),
      OrderedDict([('audio1', 'audio/p4.wav'), ('audio2', 'audio/p2.wav'), ('img1', 'img/04.jpg'), ('img2', 'img/02.jpg'), ('par1', 2), ('par2', 4)]),
      OrderedDict([('audio1', 'audio/p2.wav'), ('audio2', 'audio/p5.wav'), ('img1', 'img/05.jpg'), ('img2', 'img/02.jpg'), ('par1', 2), ('par2', 5)]),
      OrderedDict([('audio1', 'audio/p2.wav'), ('audio2', 'audio/p6.wav'), ('img1', 'img/06.jpg'), ('img2', 'img/02.jpg'), ('par1', 2), ('par2', 6)]),
      OrderedDict([('audio1', 'audio/p3.wav'), ('audio2', 'audio/p4.wav'), ('img1', 'img/04.jpg'), ('img2', 'img/03.jpg'), ('par1', 3), ('par2', 4)])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
    Routine fixation
    Routine training
  LoopTerminator trials
  Routine inst_test_fami_1
  Routine inst_test_fami_2
  Routine inst_test_fami_3
  Routine inst_test_fami_4
  Routine inst_test_fami_5
  LoopInitiator loop_familiar loopType="TrialHandler"
    nReps = 1
    conditionsFile = testFamiliar.xlsx
    loopType = random
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    Routine fixation
    Routine test_familiar
  LoopTerminator loop_familiar
  Routine inst_teste_1
  Routine inst_teste_2
  LoopInitiator loop_test loopType="TrialHandler"
    nReps = 1
    conditionsFile = test.xlsx
    loopType = random
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    conditions:
      [OrderedDict([('audioTest', 'audio/p1.wav'), ('imgTestA', 'img/05.jpg'), ('imgTestB', 'img/06.jpg'), ('imgTestC', 'img/03.jpg'), ('imgTestD', 'img/01.jpg'), ('correctTest', 4), ('parT', 1), ('comp1', 5), ('comp2', 6), ('comp3', 3), ('comp4', 1)]),
      OrderedDict([('audioTest', 'audio/p1.wav'), ('imgTestA', 'img/01.jpg'), ('imgTestB', 'img/03.jpg'), ('imgTestC', 'img/05.jpg'), ('imgTestD', 'img/04.jpg'), ('correctTest', 1), ('parT', 1), ('comp1', 1), ('comp2', 3), ('comp3', 5), ('comp4', 4)]),
      OrderedDict([('audioTest', 'audio/p2.wav'), ('imgTestA', 'img/03.jpg'), ('imgTestB', 'img/04.jpg'), ('imgTestC', 'img/02.jpg'), ('imgTestD', 'img/05.jpg'), ('correctTest', 3), ('parT', 2), ('comp1', 3), ('comp2', 4), ('comp3', 2), ('comp4', 5)]),
      OrderedDict([('audioTest', 'audio/p2.wav'), ('imgTestA', 'img/05.jpg'), ('imgTestB', 'img/04.jpg'), ('imgTestC', 'img/02.jpg'), ('imgTestD', 'img/06.jpg'), ('correctTest', 3), ('parT', 2), ('comp1', 5), ('comp2', 4), ('comp3', 2), ('comp4', 6)]),
      OrderedDict([('audioTest', 'audio/p3.wav'), ('imgTestA', 'img/03.jpg'), ('imgTestB', 'img/01.jpg'), ('imgTestC', 'img/05.jpg'), ('imgTestD', 'img/06.jpg'), ('correctTest', 1), ('parT', 3), ('comp1', 3), ('comp2', 1), ('comp3', 5), ('comp4', 6)]),
      OrderedDict([('audioTest', 'audio/p3.wav'), ('imgTestA', 'img/02.jpg'), ('imgTestB', 'img/06.jpg'), ('imgTestC', 'img/03.jpg'), ('imgTestD', 'img/01.jpg'), ('correctTest', 3), ('parT', 3), ('comp1', 2), ('comp2', 5), ('comp3', 3), ('comp4', 1)])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
    Routine fixation_2
    Routine test_trials
  LoopTerminator loop_test
  Routine inst_self_evalu
  Routine self_evalu_response
  Routine inst_final
